spinsys {
    nuclei 133Cs
    channels 133Cs
quadrupole 1 1 1000000 0.6 0 0 0
shift 1 -10.0p 0 0 0 0 0
} 

par {
    start_operator   I1z
    detect_operator  I1p
    spin_rate        5000
    sw               10000
    crystal_file     rep320
    np               1
    proton_frequency 600e6
    gamma_angles 10
    variable rf      40000
    variable rotor_period   1/spin_rate
    variable tau 50
    variable T1 6.0
    variable T2 4.0
variable shift -150000.0
}

proc pulseq {} {
    global par
    matrix set detect coherence {-3 3}
    set rf  $par(rf)
    set delay $par(tau)
    set T1  $par(T1)
    set T2  $par(T2)
offset -150000.0
    pulse $T1 $par(rf) y
    delay $delay
    pulse $T2 $par(rf) x
    pulse $T2 $par(rf) y
    pulse $T2 $par(rf) x
    acq
}

proc main {} {
    global par
    set f [fsimpson]
    fsave $f $par(shift).fid -xreim
}