spinsys {
    nuclei 133Cs
    channels 133Cs
    quadrupole 1 1 250000 0.6 0 0 0
} 

par {
    start_operator   I1z
    detect_operator  I1p
    spin_rate        5000
    sw               30000
    crystal_file     rep320
    np               1
    proton_frequency 600e6
    variable rf      40000
 variable tau 50
variable T1 5
variable T2 4
    gamma_angles 10
}

proc pulseq {} {
    global par
    matrix set detect coherence {3}
    reset
    set rf  $par(rf)
    set delay $par(tau)
    set T1  $par(T1)
    set T2  $par(T2)
    set tdwell [expr 1.0e6/$par(sw)]
    set outfile [open "2p$T1$delay$T2.txt" a] 
    
    pulse $T1 $par(rf) y
    delay $delay
    pulse $T2 $par(rf) y
    acq
    set t [matrix get density]
    puts $outfile "$t"
    close $outfile
}

proc main {} {
    global par
    set f [fsimpson]
    fsave $f $par(name).fid
}